PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['whiteheart.png', 'arrowcross.png', 'stimuli.csv', 'arrows.png', 'stimuli_prac_1.xlsx', 'stimuli_prac_2.xlsx', 'stimuli_prac_3.xlsx', 'trialtypes.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -0.4824, -0.4902, -0.4824
  expName = category_switch
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_15
      Code Type = JS
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      Begin JS Experiment:
        new_trial_alive = " ";
        new_trial_stimuli = " ";
        last_trial_alive = " ";

        show_feedback = false;
        show_hint_on_first_n = 8;
        feedback_symbol = "";
        heart = "whiteheart.png";
        cross = "arrowcross.png";
        practice_i = 0;
        block_i = 1;
        i = 0;
        block_total = 4;

        TEXT_STIMULI_OFFSET_SECONDS = 0.7;
        SWITCH = "switch"
        NON_SWITCH = "non-switch"

        total_count_switch = 0;
        total_count_non_switch = 0;
        total_count_corr_switch = 0;
        total_count_corr_non_switch = 0;

        total_latency_switch = 0;
        total_latency_non_switch = 0;
        total_latency_corr_switch = 0;
        total_latency_corr_non_switch = 0;

        stim_living = ["shark", "lion", "oak", "alligator", "mushroom", "sparrow", "goldfish", "lizard"];
        stim_nonliving = ["table", "bicycle", "coat", "cloud", "pebble", "knob", "marble", "snowflake"];
        stim_big = ["table", "bicycle", "coat", "cloud", "shark", "lion", "oak", "alligator"];
        stim_small = ["pebble", "knob", "marble", "snowflake", "mushroom", "sparrow", "goldfish", "lizard"];
        practice_i = 0;

        for (i = 0; i < 8; i++) {
            stim_living[i] = [stim_living[i], "congruent", "alive"];
            stim_nonliving[i] = [stim_nonliving[i], "incongruent", "alive"];
            stim_big[i] = [stim_big[i], "congruent", "size"];
            stim_small[i] = [stim_small[i], "incongruent", "size"];
        }

        // create really big stimulus lists to avoid running out of index
        stim_living = stim_living.concat(stim_living)
        stim_living = stim_living.concat(stim_living)
        stim_living = stim_living.concat(stim_living)
        stim_nonliving = stim_living.concat(stim_nonliving)
        stim_nonliving = stim_living.concat(stim_nonliving)
        stim_nonliving = stim_living.concat(stim_nonliving)
        stim_big = stim_big.concat(stim_big)
        stim_big = stim_big.concat(stim_big)
        stim_big = stim_big.concat(stim_big)
        stim_small = stim_small.concat(stim_small)
        stim_small = stim_small.concat(stim_small)
        stim_small = stim_small.concat(stim_small)

        target_stims = stim_living.concat(stim_nonliving, stim_big, stim_small)
  Routine instructions
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        i = 0
        k = 0



        alive = first_stims[0][2]
        new_trial_congruent = first_stims[0][1]


        trial_switch_array = []
        trial_congruent_array = []
        trial_alive_array = []
    TextboxComponent text_3
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.04
      padding = 0.05
      pos = (0, 0.1)
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text:
        Remember, if you see a heart: press the LEFT arrow key if living and the RIGHT arrow key if nonliving.

        If you see a cross: press the LEFT arrow key if big and the RIGHT arrow key if small.


        --press SPACE to continue--
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    TextComponent text_4
      letterHeight = 0.03
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LIVING
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    TextComponent text_5
      letterHeight = 0.03
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BIG
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    TextComponent text_6
      letterHeight = 0.03
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = NONLIVING
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    TextComponent text_7
      letterHeight = 0.03
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SMALL
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    ImageComponent heart_instruct
      image = heart.png
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent cross_instruct
      image = cross.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine cue_presentation
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trial_list[k][1] == "living":
            cue_stim = heart
        else:
            cue_stim = cross

        cue_word = trial_list[k][2]

        thisExp.addData('mt_char', trial_list[k][1])
        thisExp.addData('mt_word', cue_word)
        thisExp.addData('mt_cong', trial_list[k][3])
        thisExp.addData('mt_ans', trial_list[k][5])

        # switch / non-switch
        if k == 0:
            trial_type = ""
        else:
            trial_type = SWITCH if trial_list[k][0] else NON_SWITCH
        thisExp.addData('mt_type', trial_type)
  Routine trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        show_feedback = False

        corr_ans = trial_list[k][5]
      End Routine:
        resp_milliseconds = key_resp.rt * 1000
        qual_trial = 1 if (resp_milliseconds >= 100) else 0

        thisExp.addData("resp_milli", resp_milliseconds)
        thisExp.addData("mt_qualtrial", qual_trial)

        if k > 0:
            # COUNTS
            count_switch = (
                1 if (trial_type == SWITCH and qual_trial) else 0
            )
            total_count_switch += count_switch

            count_non_switch = (
                1 if (trial_type == NON_SWITCH and qual_trial) else 0
            )
            total_count_non_switch += count_non_switch

            count_corr_switch = (
                1 if (count_switch and key_resp.corr == 1) else 0
            )
            total_count_corr_switch += count_corr_switch

            count_corr_non_switch = (
                1 if (count_non_switch and key_resp.corr == 1) else 0
            )
            total_count_corr_non_switch += count_corr_non_switch

            thisExp.addData("count_switch", count_switch)
            thisExp.addData("count_non_switch", count_non_switch)
            thisExp.addData("count_corr_switch", count_corr_switch)
            thisExp.addData("count_corr_non_switch", count_corr_non_switch)

            # LATENCY
            latency_switch = (
                resp_milliseconds if (trial_type == SWITCH and qual_trial) else 0
            )
            total_latency_switch += latency_switch;

            latency_non_switch = (
                resp_milliseconds if (trial_type == NON_SWITCH and qual_trial) else 0
            )
            total_latency_non_switch += latency_non_switch;

            latency_corr_switch = (
                latency_switch if key_resp.corr == 1 else 0
            )
            total_latency_corr_switch += latency_corr_switch;

            latency_corr_non_switch = (
                latency_non_switch if key_resp.corr == 1 else 0
            )
            total_latency_corr_non_switch += latency_corr_non_switch;

            thisExp.addData("latency_switch", latency_switch)
            thisExp.addData("latency_non_switch", latency_non_switch)
            thisExp.addData("latency_corr_switch", latency_corr_switch)
            thisExp.addData("latency_corr_non_switch", latency_corr_non_switch)

        # record these at the last rep of everything
        if is_last_block and (trials.nTotal-1 == trials.thisRepN):
            # COUNTS
            thisExp.addData("total_count_switch", total_count_switch)
            thisExp.addData("total_count_non_switch", total_count_non_switch)
            thisExp.addData("total_count_corr_switch", total_count_corr_switch)
            thisExp.addData("total_count_corr_non_switch", total_count_corr_non_switch)

            prop_corr_switch = total_count_corr_switch / total_count_switch
            thisExp.addData("prop_corr_switch", prop_corr_switch)

            prop_corr_non_switch = total_count_corr_non_switch / total_count_non_switch
            thisExp.addData("prop_corr_non_switch", prop_corr_non_switch)

            thisExp.addData("acc_switch_cost", prop_corr_switch - prop_corr_non_switch)

            # LATENCY
            total_num_of_trials = trials.nTotal * blocks.nTotal - blocks.nTotal
            mean_rt_switch = total_latency_corr_switch / total_num_of_trials
            thisExp.addData("mean_rt_switch", mean_rt_switch)

            mean_rt_non_switch = total_latency_corr_non_switch / total_num_of_trials
            thisExp.addData("mean_rt_non_switch", mean_rt_non_switch)

            rt_switch_cost = mean_rt_switch - mean_rt_non_switch
            thisExp.addData("rt_switch_cost", rt_switch_cost)
    ImageComponent cue_8
      image [set every repeat] = $cue_stim
      pos = (0, 0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.35
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.7
      text [set every repeat] = $cue_word
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    KeyboardComponent key_resp
      allowedKeys = 'e','i'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      storeCorrect = True
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  Routine end_practice_block
    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        practice_i = i + 1

        shuffle(target_stims)
        first_stims = target_stims[0:4]
  Routine feedback_1
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if practice_i == 0:
            feedback_symbol = "X"
            feedback_message_e = "LIVING"
            feedback_message_i = "NON-LIVING"
        else:
            feedback_symbol = "X"
            feedback_message_e = "BIGGER"
            feedback_message_i = "SMALLER"

        if prac_1_key_resp_1_2.corr == 0:
            feedback_time = 0.5
        else:
            feedback_time = 0
      End Routine:
        k = k+1
    TextboxComponent feed_sym_3
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_symbol
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    TextboxComponent feed_mess_e_3
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.06
      pos = (-0.3, -0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_message_e
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    TextboxComponent feed_mess_i_3
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.06
      pos = (0.3, -0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_message_i
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  Routine feedback_2
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if characteristic == "living":
            feedback_symbol = "X"
            feedback_message_e = "LIVING"
            feedback_message_i = "NON-LIVING"
        else:
            feedback_symbol = "X"
            feedback_message_e = "BIGGER"
            feedback_message_i = "SMALLER"

        if prac_3_key_resp.corr == 0:
            feedback_time = 0.5
        else:
            feedback_time = 0
      End Routine:
        k = k+1
    TextboxComponent feed_sym_4
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_symbol
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    TextboxComponent feed_mess_e_4
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.06
      pos = (-0.3, -0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_message_e
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    TextboxComponent feed_mess_i_4
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.06
      pos = (0.3, -0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_message_i
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  Routine practice_instructions_2
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        k = 0
    TextboxComponent text_17
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.04
      padding = 0.05
      pos = (0, 0.1)
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text:
        Now, we are going to do both categories.

        Remember, if you see a heart: press the LEFT arrow key if living and the RIGHT arrow key if nonliving.

        If you see a cross: press the LEFT arrow key if big and the RIGHT arrow key if small.


        --press SPACE to continue--
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_18
      letterHeight = 0.03
      pos = (-.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LIVING
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    TextComponent text_19
      letterHeight = 0.03
      pos = (-.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BIG
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    TextComponent text_20
      letterHeight = 0.03
      pos = (.45, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = NONLIVING
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    TextComponent text_21
      letterHeight = 0.03
      pos = (.45, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SMALL
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    ImageComponent heart_instruct_2
      image = heart.png
      pos = (0, -.25)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent cross_instruct_2
      image = cross.png
      pos = (0, -.35)
      saveStartStop = False
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine first_trial
    CodeComponent code_16
      Code Type = JS
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      Begin JS Routine:
        if ((new_trial_congruent=== "congruent")) {
            corr_ans = "e";
        } else {
            corr_ans = "i";
        }
      End JS Routine:
        target_stims = [];
    ImageComponent cue_7
      image [set every repeat] = $cue_stim
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.35
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    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.7
      text [set every repeat] = $first_stims[k][0]
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    KeyboardComponent key_resp_4
      allowedKeys = 'e','i'
      correctAns = corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.7
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  Routine first_cue
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if alive == "alive":
            cue_stim = heart
        else:
            cue_stim = cross
  Routine trial_setup
    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        if characteristic == "living":
            living_stims.append(
                ["living", word, congruency, congruency_side, answer_key]
            )
        elif characteristic == "size":
            size_stims.append(
                ["size", word, congruency, congruency_side, answer_key]
            )
        else:
            raise Exception("Non-recognisable characteristic.");
  Routine end_block
    CodeComponent code_19
      Code Type = JS
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      Begin JS Experiment:
        msg = "no message!";
        block_message = 'no message';
      Begin JS Routine:
        if ((block_i === 0)) {
            end_block_message = "You have reached the end of the practice.";
        } else {
            end_block_message = "You have reached the end of block " + block_i + " of " + block_total + ".";
        }
      End JS Routine:
        block_i = (block_i + 1);
    TextboxComponent text_13
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.06
      padding = 0.05
      size = (1.3, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_block_message
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent text_24
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.05
      padding = 0.05
      pos = (0, -.25)
      size = (1.3, 0.5)
      startVal [time (s)] = 0.0
      text = --press SPACE to continue--
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  Routine end_exp
    CodeComponent code_28
      Code Type = JS
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      Begin JS Experiment:
        var ending_message = "";
      Begin JS Routine:
        document.body.style.cursor='auto';

        // This is the first task, so need to redirect to second task
        if ((!expInfo["session2"])) {
            ending_message = (
                "You have reached the end of this task.\n \n" +
                "Press Spacebar to continue to the final part of Session 2."
            );
            psychoJS.setRedirectUrls("https://run.pavlovia.org/Yiting93/reading-span-final/?participant="+expInfo["participant"]+"&session2=1", "");
        }
        // This is the last task, so redirect to exit survey
        else {
            ending_message = (
                "You have reached the end of the experiment, thank you for your participation.\n \n" +
                "The next page contains information about the prize draw.\n \n" +
                "Press Spacebar now to exit the experiment. Then, click 'Ok' to proceed."
            );
            psychoJS.setRedirectUrls("https://livpsych.eu.qualtrics.com/jfe/form/SV_ezLuna2MXYnMvUa", "");
        }
    TextboxComponent text_8
      bold = False
      editable = False
      letterHeight = 0.05
      lineSpacing = 1.5
      padding = 0.05
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
      text [set every frame] = $ending_message
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pause_keys
    TextboxComponent text_14
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.04
      padding = 0.05
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text:
        Get ready:

        put your index fingers on the 'E' and 'I' keys on your keyboard.


        When you're ready, press Spacebar to start practice.
    ImageComponent image
      image = arrows.png
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 6.5
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    TextComponent text_22
      letterHeight = 0.04
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 6.5
      text = Please press SPACE now.
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 6.5
      store = nothing
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  Routine instructions_again
    TextComponent text_25
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Here are the instructions again:
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  Routine practice_instructions_1
    TextboxComponent welcome_mes
      bold = False
      editable = False
      letterHeight = 0.5
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Welcome to the Category Switch Task!
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    TextboxComponent textbox
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        This this task you will be asked to perform two simple categorisation tasks.

        Press the Spacebar to get instructions for your first task.
    KeyboardComponent key_to_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
    CodeComponent code_27
      Code Type = JS
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      Begin JS Experiment:
        document.body.style.cursor='none';

        console.log(expInfo['participant']);
        console.log(expInfo['session2']);
    TextboxComponent welcome_2
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Category Switch Task!
    TextboxComponent task_intro
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.04
      lineSpacing = 1.5
      size = (1.3, 0.6)
      startVal [time (s)] = 0.0
      text = You will be asked to perform two categorisation tasks. But before that you will practice the tasks in order to become familiar with them.
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    TextComponent intro_space_text
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO PROCEED>
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    KeyboardComponent proceed_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine practice_instructions_3
    CodeComponent code_prac_1
      Code Type = Auto->JS
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      Begin Routine:
        k = 0

        if practice_i == 0:
            practice_text = "'Living' Task:\n living or non-living object? \n \n \n \n In this task you will be presented a word, e.g. 'bug' or 'car' in the middle of the screen. A heart symbol will be located directly above the word. \n \n \n Your task is to decide as fast as possible whether the word, e.g. 'bug', represents a 'LIVING' object or a 'NON-LIVING' object.\n \n Press the E button if the word is a NON-LIVING object. \n Press the I button if the letter is a LIVING object.\n The computer will tell you if you make a mistake. \n \n \n Press the Spacebar to start practice."
        else:
            practice_text = "'Size' Task:\n smaller or bigger than a basketball? \n \n \n \n In this task you will be presented a word, e.g. 'bug' or 'car' in the middle of the screen. An arrowcross symbol will be located directly above the word. \n \n \n Your task is to decide as fast as possible whether the word represents an object that is BIGGER or SMALLER than a basketball.\n \n Press the E button if the object is SMALLER than a basketball. \n Press the I button if the object is BIGGER than a basketball.\n The computer will tell you if you make a mistake. \n \n \n Press the Spacebar to start practice."
    TextboxComponent living_task_title
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        'Size' Task:
        smaller or bigger than a basketball?
    TextboxComponent text_9
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.04
      padding = 0.05
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
      text [set every frame] = $practice_text
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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  Routine prac_1_feedback
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if practice_i == 0:
            feedback_symbol = "X"
            feedback_message_e = "NON-LIVING"
            feedback_message_i = "LIVING"
        else:
            feedback_symbol = "X"
            feedback_message_e = "BIGGER"
            feedback_message_i = "SMALLER"

        if prac_1_key_resp_1.corr == 0:
            feedback_time = 0.5
        else:
            feedback_time = 0
      End Routine:
        k = k+1
    TextboxComponent feed_sym
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_symbol
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    TextboxComponent feed_mess_e
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.06
      pos = (-0.3, -0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_message_e
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    TextboxComponent feed_mess_i
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.06
      pos = (0.3, -0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_message_i
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  Routine prac_trial_1_2
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if congruency_stim == "congruent":
            corr_ans = "e"
        else:
            corr_ans = "i"
    ImageComponent cue_1
      image [set every repeat] = $practice_cue
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent prac_1_key_resp_2
      allowedKeys = 'i', 'e'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine code_20
  Routine prac_1_2_feedback
    CodeComponent code_10_11
      Code Type = Auto->JS
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      Begin Routine:
        if practice_i == 0:
            feedback_symbol = "X"
            feedback_message_e = "LIVING"
            feedback_message_i = "NON-LIVING"
        else:
            feedback_symbol = "X"
            feedback_message_e = "BIGGER"
            feedback_message_i = "SMALLER"

        if prac_1_key_resp_2.corr == 0:
            feedback_time = 0.5
        else:
            feedback_time = 0
      End Routine:
        k = k+1
    TextboxComponent feed_sym_2
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_symbol
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    TextboxComponent feed_mess_e_2
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.06
      pos = (-0.3, -0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_message_e
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    TextboxComponent feed_mess_i_2
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.06
      pos = (0.3, -0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedback_time
      text [set every repeat] = $feedback_message_i
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  Routine get_ready
    TextboxComponent text_53
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.04
      lineSpacing = 1.5
      padding = 0.05
      size = (1.2, 0.9)
      startVal [time (s)] = 0.5
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      text:
        Get ready:

        put your index fingers on the 'E' and 'I' keys on your keyboard.
    TextComponent space_text
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = <SPACEBAR>
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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  Routine main_instr
    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        i = 0
        k = 0



        alive = first_stims[0][2]
        new_trial_congruent = first_stims[0][1]


        trial_switch_array = []
        trial_congruent_array = []
        trial_alive_array = []
    TextboxComponent main_task_title
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Main Experiment
    TextboxComponent task_instr
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.035
      lineSpacing = 1.5
      pos = (0, -0.08)
      size = (1.3, 0.6)
      startVal [time (s)] = 0.0
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      text:
        The practice phase is over and the actual task is about to start.

        REMEMBER: A single word will appear in the middle of the screen with a heart or an arrowcross symbol above it. The symbol tells you which task to perform.

        - If the symbol is a heart: Do the LIVING Task (living or non-living object?)
        - If the symbol is an arrowcross: Do the SIZE Task (bigger or smaller than a basketball?)

        Also remember to respond as QUICKLY and ACCURATELY as you can.

        Are you ready? Put your index fingers on the 'E' (LIVING or BIGGER) and 'I' (NON_LIVING or SMALLER) keys on your keyboard.
    TextComponent space_text_4
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO START THE EXPERIMENT>
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    KeyboardComponent next_key_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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  Routine main_task_setup
    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        i = 0
        k = 0



        alive = first_stims[0][2]
        new_trial_congruent = first_stims[0][1]


        trial_switch_array = []
        trial_congruent_array = []
        trial_alive_array = []
  Routine trial_feedback
    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        print("trial_feedback")
        print(key_resp.corr)
        print(show_feedback)
        # incorrect answer
        if key_resp.corr == 0:
            show_feedback = True
        # correct answer
        else:
            continueRoutine = False
      End Routine:
        k += 1
    ImageComponent cue
      image [set every repeat] = $cue_stim
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [condition] = $show_feedback
      stopVal [duration (s)] = 0.5
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    TextComponent text_11
      letterHeight = 0.1
      saveStartStop = False
      startVal [condition] = $show_feedback
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cue_word
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    TextboxComponent feed_sym_8
      autoLog = False
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      pos = (0, -0.25)
      saveStartStop = False
      size = (None, None)
      startVal [condition] = $show_feedback
      stopVal [duration (s)] = 0.5
      text [set every repeat] = X
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  Routine living_prac_instr
    CodeComponent code_prac
      Code Type = Auto->JS
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      Begin Routine:
        k = 0

        if practice_i == 0:
            practice_text = "In this task you will be presented a word in the middle of the screen (e.g., dog, car) with a heart symbol directly above it. Your task is to decide as fast as possible whether the word represents a 'LIVING' object or a 'NON-LIVING' object. \n \n \n - Press the E button if the word is a LIVING object. \n - Press the I button if the letter is a NON-LIVING object.\n \n \n If you make a mistake, a red X appears. Simply correct your response and move on. \n \n \n Ready to practice? Put your index fingers on the 'E' (LIVING) and 'I' (NON-LIVING) keys on your keyboard."
        else:
            practice_text = "In this task you will be presented a word in the middle of the screen (e.g., dog, car) with an arrowcross symbol directly above it. Your task is to decide as fast as possible whether the word represents an object that is BIGGER or SMALLER than a basketball. \n \n \n - Press the E button if the object is BIGGER than a basketball. \n - Press the I button if the object is SMALLER than a basketball.\n \n \n If you make a mistake, a red X appears. Simply correct your response and move on. \n \n \n Ready to practice? Put your index fingers on the 'E' (BIGGER) and 'I' (SMALLER) keys on your keyboard.."
    TextboxComponent living_title
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        'Living' Task:
        living or non-living object?
    TextboxComponent text_9_1
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.035
      lineSpacing = 1.5
      pos = (0, -0.08)
      size = (1.3, 0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $practice_text
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    TextComponent living_prac_space
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO START PRACTICING>
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    KeyboardComponent key_resp_3_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
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  Routine living_prac_cue
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        show_hint = prac_trials_1.thisN < show_hint_on_first_n

        if practice_i == 0:
            practice_cue = heart
            #cue_text = "Does the word describe a living thing?"
        else:
            practice_cue = cross
            #cue_text = "Does the word describe a something bigger than a basketball?"
  Routine living_prac_trial
    CodeComponent code_5_1
      Code Type = JS
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      Begin JS Experiment:
        living_prac_mean_reaction_time = 0;
        living_prac_num_of_errors = 0;
      Begin JS Routine:
        if ((congruency_stim === "congruent")) {
            corr_ans = "e";
        } else {
            corr_ans = "i";
        }

        // only start new timer if correct answer was given
        if (feedback_symbol === "") {
            timer = new util.Clock();
        }
      End JS Routine:
        if ((prac_1_key_resp.corr === 0)) {
            // only count errors once for each cue word
            if (feedback_symbol !== "X") {
                living_prac_num_of_errors += 1;
            }
            feedback_symbol = "X";
        } else {
            feedback_symbol = "";
            prac_until_correct_1.finished = true;

            // minus 0.1 because the stimuli only appears after 0.1s of when the
            // routine starts
            living_prac_mean_reaction_time += (timer.getTime() - TEXT_STIMULI_OFFSET_SECONDS);
        }
    ImageComponent cue_5_1
      image [set every repeat] = $practice_cue
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.35
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    TextComponent text_10_1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.7
      text [set every repeat] = $word
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    TextComponent reminder_nonliving
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0.2, -0.4)
      saveStartStop = False
      startVal [condition] = $show_hint
      text [set every repeat] = NON-LIVING (I)
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    TextComponent reminder_living
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (-0.2, -0.4)
      saveStartStop = False
      startVal [condition] = $show_hint
      text [set every repeat] = LIVING (E)
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    KeyboardComponent prac_1_key_resp
      allowedKeys = "e", "i"
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.7
      storeCorrect = True
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    TextboxComponent feed_sym_5
      autoLog = False
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      pos = (-0.05, -0.25)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_symbol
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  Routine size_prac_instr
    CodeComponent code_prac_2
      Code Type = Auto->JS
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      Begin Routine:
        k = 0

        if practice_i == 0:
            practice_text = "In this task you will be presented a word, e.g. 'bug' or 'car' in the middle of the screen. A heart symbol will be located directly above the word. \n \n \n Your task is to decide as fast as possible whether the word, e.g. 'bug', represents a 'LIVING' object or a 'NON-LIVING' object.\n \n Press the E button if the word is a LIVING object. \n Press the I button if the letter is a NON-LIVING object.\n \n \n The computer will tell you if you make a mistake. \n \n \n Press the Spacebar to start practice."
        else:
            practice_text = "In this task you will be presented a word in the middle of the screen (e.g., dog, car) with an arrowcross symbol directly above it. Your task is to decide as fast as possible whether the word represents an object that is BIGGER or SMALLER than a basketball. \n \n \n - Press the E button if the object is BIGGER than a basketball. \n - Press the I button if the object is SMALLER than a basketball.\n \n \n If you make a mistake, a red X appears. Simply correct your response and move on. \n \n \n Ready to practice? Put your index fingers on the 'E' (BIGGER) and 'I' (SMALLER) keys on your keyboard.."
    TextboxComponent size_task_title
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        'Size' Task:
        smaller or bigger than a basketball?
    TextboxComponent text_26
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.035
      lineSpacing = 1.5
      pos = (0, -0.08)
      size = (1.3, 0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $practice_text
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    TextComponent size_prac_space
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO START PRACTICING>
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    KeyboardComponent key_resp_4_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
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  Routine size_prac_cue
    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        show_hint = prac_trials_2.thisN < show_hint_on_first_n

        if practice_i == 0:
            practice_cue = heart
            #cue_text = "Does the word describe a living thing?"
        else:
            practice_cue = cross
            #cue_text = "Does the word describe a something bigger than a basketball?"
  Routine size_prac_trial
    CodeComponent code_5
      Code Type = JS
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      Begin JS Experiment:
        size_prac_mean_reaction_time = 0;
        size_prac_num_of_errors = 0;
      Begin JS Routine:
        if ((congruency_stim === "congruent")) {
            corr_ans = "e";
        } else {
            corr_ans = "i";
        }

        // only start new timer if correct answer was given
        if (feedback_symbol === "") {
            timer = new util.Clock();
        }
      End JS Routine:
        if ((prac_2_key_resp.corr === 0)) {
            // only count errors once for each cue word
            if (feedback_symbol !== "X") {
                size_prac_num_of_errors += 1;
            }
            feedback_symbol = "X";
        } else {
            feedback_symbol = "";
            prac_until_correct_2.finished = true;

            // minus 0.1 because the stimuli only appears after 0.1s of when the
            // routine starts
            size_prac_mean_reaction_time += (timer.getTime() - TEXT_STIMULI_OFFSET_SECONDS);
        }
    ImageComponent cue_5
      image [set every repeat] = $practice_cue
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.35
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    TextComponent text_10
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.7
      text [set every repeat] = $word
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    TextComponent reminder_small
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0.2, -0.4)
      saveStartStop = False
      startVal [condition] = $show_hint
      text [set every frame] = SMALLER (I)
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    TextComponent reminder_big
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (-0.2, -0.4)
      saveStartStop = False
      startVal [condition] = $show_hint
      text [set every frame] = BIGGER (E)
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    KeyboardComponent prac_2_key_resp
      allowedKeys = 'i', 'e'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.7
      storeCorrect = True
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    TextboxComponent feed_sym_6
      autoLog = False
      bold = True
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      pos = (-0.05, -0.25)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_symbol
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    TextComponent basketball_text
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.02
      pos = (0, -0.45)
      saveStartStop = False
      startVal [condition] = $show_hint
      text = than a basketball
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  Routine joint_prac_instr
    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        k = 0
    TextboxComponent comb_prac_title
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Combined Task: ‘Living’ + ‘Size’ Task
    TextboxComponent comb_prac_instr_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.035
      lineSpacing = 1.5
      pos = (0, -0.08)
      size = (1.3, 0.6)
      startVal [time (s)] = 0.0
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      text:
        The actual task in this experiment is the combination of the previous two. A single word will appear in the middle of the screen with a heart or an arrowcross symbol above it. The symbol tells you which task to perform:

        - If the symbol is a heart: Do the LIVING Task (living or non-living object?)
        - If the symbol is an arrowcross: Do the SIZE Task (bigger or smaller than a basketball?)

        Respond as QUICKLY and ACCURATELY as you can. The computer will tell you if you make a mistake. Simply correct your response and move on.

        Ready to practice? Put your index fingers on the 'E' (LIVING or BIGGER) and 'I' (NON_LIVING or SMALLER) keys on your keyboard.
    TextComponent space_text_3
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO START PRACTICING>
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    KeyboardComponent next_key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
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  Routine joint_prac_cue
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if characteristic == "living":
            practice_cue = heart
            task_reminder = "LIVING TASK"
            left_reminder_text = "LIVING"
            right_reminder_text = "NON-LIVING"
        else:
            practice_cue = cross
            task_reminder = "SIZE TASK"
            left_reminder_text = "BIGGER"
            right_reminder_text = "SMALLER"
  Routine joint_prac_trial
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if congruency_stim == "congruent":
            corr_ans = "e"
        else:
            corr_ans = "i"
      End Routine:
        # incorrect answer
        if prac_3_key_resp.corr == 0:
            show_hint = True
        # correct answer
        else:
            show_hint = False
            # proceed to next cue
            prac_until_correct_3.finished = True
    ImageComponent cue_6
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $practice_cue
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.35
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    TextComponent text_15
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.7
      text [set every repeat] = $word
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    KeyboardComponent prac_3_key_resp
      allowedKeys = 'i','e'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.7
      storeCorrect = True
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    TextboxComponent feedback_text
      autoLog = False
      bold = False
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      size = (None, None)
      startVal [condition] = $show_hint
      text [set every repeat] = $task_reminder
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    TextboxComponent left_reminder
      autoLog = False
      bold = False
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (-0.4, -0.4)
      saveStartStop = False
      size = (None, None)
      startVal [condition] = $show_hint
      text [set every repeat] = $left_reminder_text
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    TextboxComponent right_reminder
      autoLog = False
      bold = False
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (None, None)
      startVal [condition] = $show_hint
      text [set every repeat] = $right_reminder_text
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    TextComponent basketball_text_2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [condition] = $show_hint && characteristic == "size"
      text [set every repeat] = than a basketball
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  Routine main_setup
    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Routine:
        i = 0
        k = 0


        alive = first_stims[0][2]
        new_trial_congruent = first_stims[0][1]


        trial_switch_array = []
        trial_congruent_array = []
        trial_alive_array = []

        is_last_block = (block_total-1) == blocks.thisRepN

        # new method
        living_stims = []
        size_stims = []
  Routine create_trial_list
    CodeComponent code_29
      Code Type = Auto->JS
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      Begin Routine:
        nonrandom = [0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1]

        characteristic_list = None
        randomised = None
        idx = 0

        while True:
            characteristic_list = []
            randomised = util.shuffle(nonrandom)
            idx = 0
            while idx < len(randomised):
                if idx == 0:
                    characteristic_list.append(True)
                # 0 means no switch, so we keep the same characteristic
                elif not randomised[idx]:
                    # this is to force the value to be a boolean in Javascript
                    characteristic_list.append(not not characteristic_list[idx-1])
                # 1 mean switch, so we flip the characteristic
                else:
                    characteristic_list.append(not not not characteristic_list[idx-1])
                idx += 1
            if characteristic_list.count(True) == characteristic_list.count(False):
                break

        # at this point we have a balanced list of living and size stims in a
        # 16 switch and 16 non-switch list

        # now to create the final balanced switch/nonswitch vs congruent/incongruent list
        trial_list = None
        randomised_living_stims = None
        randomised_size_stims = None
        switch_con_combi = None
        while True:
            trial_list = []

            # [:] is to create a copy of the list, else the original would be modified
            # by the .pop() later on
            randomised_living_stims = util.shuffle(living_stims[:])
            randomised_size_stims = util.shuffle(size_stims[:])

            idx = 0
            while idx < len(characteristic_list):
                if characteristic_list[idx]:
                    trial_list.append([randomised[idx]].extend(randomised_living_stims.pop()))
                else:
                    trial_list.append([randomised[idx]].extend(randomised_size_stims.pop()))
                idx += 1

            switch_con_combi = []
            for item in trial_list:
                # create a list of [0congruent, 0incongruent, 1congruent, 1incongruent, ...]
                switch_con_combi.append(str(item[0]) + item[3])

            # make sure they are balanced, if not then retry
            if (
                switch_con_combi.count("0congruent") ==
                switch_con_combi.count("0incongruent") ==
                switch_con_combi.count("1congruent") ==
                switch_con_combi.count("1incongruent")
            ):
                break

        # at this point we have the list, ready to be used in the main trial
        """
        trial_list
        0 - switch / non-switch
        1 - living / size
        2 - word
        3 - congruency
        4 - congruency side
        5 - e / i (answer key)
        """
        print(trial_list)

        # but before that we need to "insert" the first cue
        if trial_list[0][1] == "living":
            tmp_trial_list = [[None, "living", "goldfish", None, None, "e"]]
        else:
            tmp_trial_list = [[None, "size", "table", None, None, "e"]]

        for item in trial_list:
            tmp_trial_list.append(item)
        trial_list = tmp_trial_list

        trial_reps = len(trial_list)
  Routine living_block_feedback
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        # plus one because thisN starts from zero
        number_of_trials = prac_trials_1.thisN + 1

        living_prac_mean_reaction_time = (
            living_prac_mean_reaction_time/number_of_trials
        )

        print(f"""number_of_trials={number_of_trials}
        living_prac_mean_reaction_time={living_prac_mean_reaction_time}
        living_prac_num_of_errors={living_prac_num_of_errors}
        """)

        error_and_timing_text = (
        f"""Number of Errors: {living_prac_num_of_errors}
        Average time taken: {living_prac_mean_reaction_time:.1f}s
        """)
    TextboxComponent feed_block_title
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Your performance in the Living Task
    TextboxComponent living_prac_err_and_timing_text
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.04
      lineSpacing = 1.5
      pos = (0, 0.10)
      size = (1.3, 0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $error_and_timing_text
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    TextboxComponent end_prac_text
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.04
      lineSpacing = 1.5
      pos = (0, -0.10)
      size = (1.3, 0.6)
      startVal [time (s)] = 0.0
      text = Your aim is to minimise your time to answer while avoiding making errors.
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    TextComponent space_text_2
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO PROCEED>
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    KeyboardComponent next_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine size_block_feedback
    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Routine:
        # plus one because thisN starts from zero
        number_of_trials = prac_trials_2.thisN + 1

        size_prac_mean_reaction_time = (
            size_prac_mean_reaction_time/number_of_trials
        )

        print(f"""number_of_trials={number_of_trials}
        size_prac_mean_reaction_time={size_prac_mean_reaction_time}
        size_prac_num_of_errors={size_prac_num_of_errors}
        """)

        error_and_timing_text = (
        f"""Number of Errors: {size_prac_num_of_errors}
        Average time taken: {size_prac_mean_reaction_time:.1f}s
        """)
    TextboxComponent title
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Block Feedback
    TextboxComponent size_prac_err_and_timing_text
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.04
      lineSpacing = 1.5
      pos = (0, 0.10)
      size = (1.3, 0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $error_and_timing_text
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    TextboxComponent end_prac_text_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.04
      lineSpacing = 1.5
      pos = (0, -0.10)
      size = (1.3, 0.6)
      startVal [time (s)] = 0.0
      text = Your aim is to minimise your time to answer while avoiding making errors.
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    TextComponent space_text_5
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO PROCEED>
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    KeyboardComponent next_key_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine setup
  Routine living_prac_instr
  LoopInitiator prac_trials_1 loopType="TrialHandler"
    conditionsFile = stimuli_prac_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'table', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'bicycle', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'coat', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'cloud', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'pebble', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'knob', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'marble', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'snowflake', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'shark', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'lion', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'oak', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'alligator', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'mushroom', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'sparrow', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'goldfish', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'lizard', 'characteristic': 'living', 'congruency_stim': 'congruent'}]
    Routine living_prac_cue
    LoopInitiator prac_until_correct_1 loopType="TrialHandler"
      loopType = sequential
      nReps = 1000
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      Routine living_prac_trial
    LoopTerminator prac_until_correct_1
  LoopTerminator prac_trials_1
  Routine living_block_feedback
  Routine end_practice_block
  Routine size_prac_instr
  LoopInitiator prac_trials_2 loopType="TrialHandler"
    conditionsFile = stimuli_prac_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'table', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'bicycle', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'coat', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'cloud', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'pebble', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'knob', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'marble', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'snowflake', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'shark', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'lion', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'oak', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'alligator', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'mushroom', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'sparrow', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'goldfish', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'lizard', 'characteristic': 'size', 'congruency_stim': 'incongruent'}]
    Routine size_prac_cue
    LoopInitiator prac_until_correct_2 loopType="TrialHandler"
      loopType = random
      nReps = 1000
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      Routine size_prac_trial
    LoopTerminator prac_until_correct_2
  LoopTerminator prac_trials_2
  Routine size_block_feedback
  Routine end_practice_block
  Routine joint_prac_instr
  LoopInitiator prac_trials_3 loopType="TrialHandler"
    conditionsFile = stimuli_prac_3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'table', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'bicycle', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'coat', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'cloud', 'characteristic': 'living', 'congruency_stim': 'incongruent'},
      {'word': 'mushroom', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'sparrow', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'goldfish', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'lizard', 'characteristic': 'living', 'congruency_stim': 'congruent'},
      {'word': 'shark', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'lion', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'oak', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'alligator', 'characteristic': 'size', 'congruency_stim': 'congruent'},
      {'word': 'mushroom', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'sparrow', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'goldfish', 'characteristic': 'size', 'congruency_stim': 'incongruent'},
      {'word': 'lizard', 'characteristic': 'size', 'congruency_stim': 'incongruent'}]
    Routine joint_prac_cue
    LoopInitiator prac_until_correct_3 loopType="TrialHandler"
      loopType = sequential
      nReps = 1000
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      Routine joint_prac_trial
    LoopTerminator prac_until_correct_3
  LoopTerminator prac_trials_3
  Routine end_practice_block
  Routine main_instr
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = block_total
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    Routine main_setup
    LoopInitiator trials_setup_loop loopType="TrialHandler"
      conditionsFile = stimuli.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('characteristic', 'living'), ('word', 'alligator'), ('congruency', 'congruent'), ('congruency_side', 'left'), ('answer_key', 'e')]),
        OrderedDict([('characteristic', 'living'), ('word', 'lion'), ('congruency', 'congruent'), ('congruency_side', 'left'), ('answer_key', 'e')]),
        OrderedDict([('characteristic', 'living'), ('word', 'oak'), ('congruency', 'congruent'), ('congruency_side', 'left'), ('answer_key', 'e')]),
        OrderedDict([('characteristic', 'living'), ('word', 'shark'), ('congruency', 'congruent'), ('congruency_side', 'left'), ('answer_key', 'e')]),
        OrderedDict([('characteristic', 'living'), ('word', 'knob'), ('congruency', 'congruent'), ('congruency_side', 'right'), ('answer_key', 'i')]),
        OrderedDict([('characteristic', 'living'), ('word', 'marble'), ('congruency', 'congruent'), ('congruency_side', 'right'), ('answer_key', 'i')]),
        OrderedDict([('characteristic', 'living'), ('word', 'pebble'), ('congruency', 'congruent'), ('congruency_side', 'right'), ('answer_key', 'i')]),
        OrderedDict([('characteristic', 'living'), ('word', 'snowflake'), ('congruency', 'congruent'), ('congruency_side', 'right'), ('answer_key', 'i')]),
        OrderedDict([('characteristic', 'living'), ('word', 'bicycle'), ('congruency', 'incongruent'), ('congruency_side', 'left'), ('answer_key', 'i')]),
        OrderedDict([('characteristic', 'living'), ('word', 'cloud'), ('congruency', 'incongruent'), ('congruency_side', 'left'), ('answer_key', 'i')])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
      Routine trial_setup
    LoopTerminator trials_setup_loop
    Routine create_trial_list
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = trial_reps
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      Routine cue_presentation
      Routine trial
      Routine trial_feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine end_exp
