PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['practice_letters/block.csv', 'practice_sentences/sentences.csv', 'practice_letters/letters.csv', 'main_test/sentences.csv']
  Screen = 3
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -0.4824, -0.4902, -0.4824
  expName = reading_span
  keyboardBackend = ioHub
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Routines
  Routine practice_letters_response
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';

        LEFT_CLICK = 0;
        BLANK_LETTER = "_";
        LETTERS = [prac_letter_S, prac_letter_P, prac_letter_K, prac_letter_F, prac_letter_T, prac_letter_Q, prac_letter_L, prac_letter_H, prac_letter_Y, prac_letter_R, prac_letter_N, prac_letter_J];
        mouse_clicked = true;
        letter_clicked = null;
        letters_clicked = [];
        display_letters_clicked.text = "";
        expected_letters = [];
        for (var item, _pj_c = 0, _pj_a = practice_letters_loop.trialList, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            item = _pj_a[_pj_c];
            console.log(item);
        }
        for (var item, _pj_c = 0, _pj_a = practice_letters_loop.trialList, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            item = _pj_a[_pj_c];
            expected_letters.push(item["letter"]);
        }
      Begin Routine:
        win.mouseVisible = True

        LEFT_CLICK = 0
        BLANK_LETTER = '_'
        LETTERS = [
            prac_letter_S, prac_letter_P, prac_letter_K, prac_letter_F,
            prac_letter_T, prac_letter_Q, prac_letter_L, prac_letter_H,
            prac_letter_Y, prac_letter_R, prac_letter_N, prac_letter_J
        ]

        # start with True and let one frame finish
        # so that it can then set mouse_clicked to be False
        # This is to guard against mouse button being held down
        # from previous routine and then "overflowing" to this routine
        mouse_clicked = True
        letter_clicked = None
        letters_clicked = []
        display_letters_clicked.text = ""

        expected_letters = []
        for item in practice_letters_loop.trialList:
            print(item)

        for item in practice_letters_loop.trialList:
            expected_letters.append(item['letter'])

        #print(f'''
        #mouse_clicked: {mouse_clicked}
        #letter_clicked: {letter_clicked}
        #letters_clicked: {letters_clicked}
        #expected_letters: {expected_letters}
        #''')
      Each Frame:
        # mouse was last recorded as "not clicked"
        if not mouse_clicked and 1 in mouse.getPressed():
            mouse_clicked = True

            # if letter is pressed
            for _letter in LETTERS:
                if mouse.isPressedIn(_letter, buttons=[LEFT_CLICK]):
                    letters_clicked.append(_letter.text)

            # if BLANK is pressed
            if mouse.isPressedIn(blank_letter, buttons=[LEFT_CLICK]):
                letters_clicked.append(BLANK_LETTER)

            # if CLEAR is pressed
            if mouse.isPressedIn(clear_letters, buttons=[LEFT_CLICK]):
                letters_clicked = []

            # if NEXT is pressed
            if mouse.isPressedIn(next_practice, buttons=[LEFT_CLICK]):
                continueRoutine = False

            display_letters_clicked.text = str(letters_clicked)
        else:
            if not 1 in mouse.getPressed():
                mouse_clicked = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (((! mouse_clicked) && _pj.in_es6(1, mouse.getPressed()))) {
            mouse_clicked = true;
            for (var _letter, _pj_c = 0, _pj_a = LETTERS, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                _letter = _pj_a[_pj_c];
                if (mouse.isPressedIn(_letter, {"buttons": [LEFT_CLICK]})) {
                    letters_clicked.push(_letter.text);
                }
            }
            if (mouse.isPressedIn(blank_letter, {"buttons": [LEFT_CLICK]})) {
                letters_clicked.push(BLANK_LETTER);
            }
            if (mouse.isPressedIn(clear_letters, {"buttons": [LEFT_CLICK]})) {
                letters_clicked = [];
            }
            if (mouse.isPressedIn(next_practice, {"buttons": [LEFT_CLICK]})) {
                continueRoutine = false;
            }
            display_letters_clicked.text = letters_clicked.toString();
        } else {
            if ((! _pj.in_es6(1, mouse.getPressed()))) {
                mouse_clicked = false;
            }
        }
      End JS Routine:
        console.log(`
        expected_letters: ${expected_letters}
        letters_clicked: ${letters_clicked}`
        );
        no_of_expected_letters = expected_letters.length;
        no_of_letters_clicked = letters_clicked.length;
        no_of_correct = 0;
        score = 0;
        for (var idx, _pj_c = 0, _pj_a = util.range(no_of_expected_letters), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            idx = _pj_a[_pj_c];
            if (((idx + 1) > no_of_letters_clicked)) {
                break;
            }
            if ((expected_letters[idx] === letters_clicked[idx])) {
                no_of_correct += 1;
            }
        }
        if ((letters_clicked.toString() === expected_letters.toString())) {
            score = no_of_expected_letters;
        }
        console.log(`
        no_of_correct: ${no_of_correct}
        score: ${score}`
        );
        trial_scores.push(score);
      End Routine:
        print(f'''
        expected_letters: {expected_letters}
        letters_clicked: {letters_clicked}
        ''')

        no_of_expected_letters = len(expected_letters)
        no_of_letters_clicked = len(letters_clicked)
        no_of_correct = 0

        score = 0

        for idx in range(no_of_expected_letters):
            if idx + 1 > no_of_letters_clicked:
                break
            if expected_letters[idx] == letters_clicked[idx]:
                no_of_correct += 1

        # perfect score
        if str(letters_clicked) == str(expected_letters):
            score = no_of_expected_letters

        print(f'''
        no_of_correct: {no_of_correct}
        score: {score}
        ''')

        # track current trial's score
        trial_scores.append(score)
    MouseComponent mouse
      clickable = clear_letters, blank_letter, next_practice, prac_letter_S, prac_letter_P, prac_letter_K, prac_letter_F, prac_letter_T, prac_letter_Q, prac_letter_L, prac_letter_H, prac_letter_Y, prac_letter_R, prac_letter_N, prac_letter_J
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent remind_text
      letterHeight = 0.035
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      text = Select the letters in the order presented. Use the BLANK button to fill in forgotten items.
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    TextComponent prac_letter_S
      letterHeight = 0.05
      pos = (-0.3, -0.12)
      startVal [time (s)] = 0.0
      text = S
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    TextComponent prac_letter_P
      letterHeight = 0.05
      pos = (-0.3, 0.01)
      startVal [time (s)] = 0.0
      text = P
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    TextComponent prac_letter_K
      letterHeight = 0.05
      pos = (-0.3, 0.13)
      startVal [time (s)] = 0.0
      text = K
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    TextComponent prac_letter_F
      letterHeight = 0.05
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = F
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    TextComponent prac_letter_T
      letterHeight = 0.05
      pos = (0, -0.12)
      startVal [time (s)] = 0.0
      text = T
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    TextComponent prac_letter_Q
      letterHeight = 0.05
      pos = (0, 0.01)
      startVal [time (s)] = 0.0
      text = Q
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    TextComponent prac_letter_L
      letterHeight = 0.05
      pos = (0, 0.13)
      startVal [time (s)] = 0.0
      text = L
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    TextComponent prac_letter_H
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = H
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    TextComponent prac_letter_Y
      letterHeight = 0.05
      pos = (0.3, -0.12)
      startVal [time (s)] = 0.0
      text = Y
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    TextComponent prac_letter_R
      letterHeight = 0.05
      pos = (0.3, 0.01)
      startVal [time (s)] = 0.0
      text = R
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    TextComponent prac_letter_N
      letterHeight = 0.05
      pos = (0.3, 0.13)
      startVal [time (s)] = 0.0
      text = N
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    TextComponent prac_letter_J
      letterHeight = 0.05
      pos = (0.3, 0.25)
      startVal [time (s)] = 0.0
      text = J
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    PolygonComponent blank_letter_BG
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0, -0.25)
      shape = rectangle
      size = (0.16, 0.065)
      startVal [time (s)] = 0.0
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    PolygonComponent clear_letters_BG
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.5, -0.40)
      shape = rectangle
      size = (0.16, 0.065)
      startVal [time (s)] = 0.0
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    PolygonComponent next_practice_BG
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.5, -0.40)
      shape = rectangle
      size = (0.16, 0.065)
      startVal [time (s)] = 0.0
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    TextComponent blank_letter
      color = black
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = BLANK
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    TextComponent display_letters_clicked
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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    TextComponent clear_letters
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (-0.5, -0.40)
      startVal [time (s)] = 0.0
      text = CLEAR
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    TextComponent next_practice
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0.5, -0.40)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine practice_letter_display_2
    CodeComponent code_24
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
      Begin Routine:
        win.mouseVisible = False
    TextComponent display_letter_jp
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $letter
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  Routine intro_2
    TextComponent intro_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = This is a practice trial
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  Routine check_score
    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        print(f'''
        perfect_scores: {perfect_scores}
        trial_scores: {trial_scores}
        ''')

        #if str(perfect_scores) == str(trial_scores):
            #practice_until_perfect.finished = True
        #else:
            #print('Restarting letter practice')
            #perfect_scores = []
            #trial_scores = []
  Routine lett_prac_instr1
    TextboxComponent lett_prac_title
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.38)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Practice Stage 1 (letters)
    TextboxComponent lett_instr_1
      alignment = center-left
      autoLog = False
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.04
      lineSpacing = 1
      saveStartStop = False
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
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      text:
        In this practice, a sequence of letters will appear on the screen (one at a time). Your task is to memorise this sequence of letters in the order presented (sequences can vary in length). Once the full sequence has been presented, you will be asked to indicate the letters you saw and in the right sequence.

        Note that:
        - If you forget any of the letters, click BLANK to mark the position of the forgotten letter.
        - If you make a mistake, click CLEAR to start over.
        - Once you are satisfied with your response, click the NEXT button at the bottom right of the screen to proceed.

        Let’s practice to help you understand the task and become familiar with the interface.
    TextComponent space_text_2
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO START PRACTICING>
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    KeyboardComponent lett_instr_space
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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  Routine lett_prac_instr2
    TextboxComponent lett_instr_2
      alignment = center-left
      autoLog = False
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.04
      saveStartStop = False
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
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      text:
        For this practice set, letters will appear on the screen one at a time. Try to remember each letter in the order presented.

        After 2-3 letters have been presented, you will see a screen listing 12 possible letters.

        Your job is to select each letter in the order presented.
        To do this, use the mouse to select each letter.

        The letters you select will appear at the bottom of the screen.


        click the mouse button to continue
    MouseComponent lett_click_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1.0
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  Routine lett_prac_instr3
    TextboxComponent lett_instr_3
      alignment = center-left
      autoLog = False
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.04
      saveStartStop = False
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
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      text:
        When you have selected all the letters, and they are in the correct order, click the NEXT button at the bottom right of the screen.

        If you make a mistake, click CLEAR to start over.

        If you forget one of the letters, click BLANK to mark the spot for the missing letter.

        Remember, is it very important to get the letters in the same order as you saw them.

        If you forget one, use the BLANK box to mark the position.

        If you have any questions, raise your hand and the experimenter in the room will attend to you.


        When you're ready, click the mouse button to start the letter practice.
    MouseComponent lett_click_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1.0
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  Routine sent_prac_instr1
    TextboxComponent sent_prac_title
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.38)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Practice Stage 2 (sentences)
    TextboxComponent sent_instru_1
      alignment = center-left
      autoLog = False
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.035
      saveStartStop = False
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
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      text:
        In this practice, a series of sentences will appear on your screen (one at a time).

        As soon as you see each sentence, as fast as possible, you should determine if it makes sense (TRUE) or not (FALSE). Once you determined this, click your left mouse button as quickly as possible. You’ll then be taken to another screen where you can insert the answer.

        Example 1: "I like to run in the park."
        - This sentence makes sense, so you should click TRUE.

        Example 2: "I like to run in the sky."
        - This sentence does not make sense, so you should click FALSE.

        It is VERY important that you determine whether the sentences make sense or not as quickly as you can, as the time you take to make these decisions are part of the task.

        Let’s practice to help you understand the task and become familiar with the interface.
    TextComponent space_text_3
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO START PRACTICING>
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    KeyboardComponent sent_instr_space
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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  Routine sent_prac_instr2
    TextboxComponent sent_instr_2
      alignment = center-left
      autoLog = False
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.04
      saveStartStop = False
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
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      text:
        You will then see "This sentence makes sense." displayed on the next screen, along with a box marked TRUE and a box marked FALSE.

        If the sentence on the previous screen made sense, click on the TRUE box.
        If the sentence did not make sense, click on the FALSE box.

        After you click one of the boxes, the computer will tell you if you made the right choice.


        click the mouse button to continue.
    MouseComponent sent_click_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1.0
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  Routine sent_prac_instr3
    TextboxComponent sent_instr_3
      alignment = center-left
      autoLog = False
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.04
      saveStartStop = False
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
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      text:
        It is VERY important that you answer the sentence problems correctly.
        It is also important that you try and read the sentences as quickly as you can.


        When you're ready, click the mouse button to try some practice problems.
    MouseComponent sent_click_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1.0
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  Routine joint_prac_instr1
    TextboxComponent joint_prac_title
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.38)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Practice Stage 3 (sentences and letters)
    TextboxComponent joint_instr_1
      alignment = center-left
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.035
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
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      text:
        In the final practice stage, we are putting together letter sequences and sentences so that you can practice the complete task.

        Like in the previous stage, we will ask you to, as fast as possible, judge whether sentences make sense (TRUE) or not (FALSE). Once you determine that, click your left mouse button as quickly as possible. You’ll then be taken to another screen where you can insert the answer.

        Be aware that, this time, your answer is time-sensitive: if you take too long to click on the mouse, you will not be able to insert your answer and the computer will consider that you answered incorrectly. Therefore, it is important to work QUICKLY and ACCURATELY.

        Immediately after determining whether a sentence is TRUE or FALSE (or when it is skipped), you will see a letter on the screen, then a sentence again, then a letter, and so on.

        Like in the first practice stage, you have to memorise the sequence of letters in the order presented. At the end of each set of sentences and letters, you will be asked to recall the sequence of the letters you saw.
    TextComponent space_text_4
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO PROCEED>
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    KeyboardComponent joint_instr_space
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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  Routine joint_prac_instr2
    TextboxComponent joint_prac_title_2
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.38)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Practice Stage 3 (sentences and letters)
    TextboxComponent joint_instr_2
      alignment = center-left
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.035
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
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      text:
        One final note about performance. Once you insert the sequence of letters, you will receive feedback about your performance.

        You will see a highlighted number in bold at the bottom of the screen. This is the percentage of sentences that you correctly identified as making sense or not. It is VERY important that you keep your score as high as possible (usually higher than 85%).

        That’s it. Are you ready to start the final practice stage?
    TextComponent space_text_5
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO START PRACTICING>
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    KeyboardComponent joint_instr_space_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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  Routine joint_prac_instr3
    TextboxComponent joint_instr_3
      alignment = center-left
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.04
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
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      text:
        During the feedback, you will see a number in red at the top right of the screen. This indicates your percent correct for the sentence problems for the entire task.

        It is VERY important for you to keep this at least 85%.
        For our purpose, we can only use data where the participant was at least 85% accurate on the sentences.

        Therefore, in order for you to be asked to come back for the second session, you must perform at least at 85% on the sentence problems WHILE doing your best to recall as many letters as possible.

        If you have any questions, raise your hand and the experimenter in the room will attend to you.


        click the mouse button to try some practice problems.
    MouseComponent joint_click_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1.0
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  Routine main_test_instr1
    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        # only show main test instructions
        # when it is main test
        if not is_main_test:
            continueRoutine = False
    TextboxComponent main_title
      bold = True
      editable = False
      letterHeight = 0.06
      padding = 0.2
      pos = (0, 0.38)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Main Experiment
    TextboxComponent main_instr_1
      alignment = center-left
      autoLog = False
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.035
      saveStartStop = False
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
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      text:
        That is the end of the practice.

        The actual experiment will look like the last practice stage you just completed. First you will get a sentence to read and determine whether it makes sense or not, then a letter to remember, and so on. Note that some of the sequences will have more sentences and letters than others (between 4 and 6).

        REMEMBER:
        - It is VERY important that you are QUICK at determining whether the sentences make sense or not.
        - Remember that if you take too long on a sentence, it will be skipped and that sentence will be considered incorrect.
        - Try to be as ACCURATE as possible (ideally over 85%)
        - Whilst doing this, make sure that you get as many letter sequences right as possible.

        If you have any questions, raise your hand now and the experimenter in the room will help you.
    TextComponent main_space_text
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO START THE EXPERIMENT>
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    KeyboardComponent main_space
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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  Routine end_instr
    TextboxComponent thankyou
      alignment = center-left
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.045
      pos = (0, 0.05)
      size = (1.1, 0.8)
      startVal [time (s)] = 0.0
      text [set every frame] = $ending_message
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    KeyboardComponent exit_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_27
      Code Type = JS
      Begin JS Experiment:
        var ending_message = "";
      Begin JS Routine:
        // This is the first task, so need to redirect to second task
        if ((!expInfo["session2"])) {
            ending_message = (
                "You have reached the end of this task.\n \n" +
                "Press Spacebar to proceed, and click 'Ok' until you reach the next task."
            );
            psychoJS.setRedirectUrls("https://run.pavlovia.org/Yiting_liverpool/category_switch_copy/?participant="+expInfo["participant"]+"&session2=1", "");
        }
        // This is the last task, so redirect to exit survey
        else {
            ending_message = (
                "You have reached the end of the experiment, thank you for your participation.\n \n" +
                "The next page contains information about the prize draw.\n \n" +
                "Press Spacebar now to exit the experiment. Then, click 'Ok' to proceed."
            );
            psychoJS.setRedirectUrls("https://livpsych.eu.qualtrics.com/jfe/form/SV_ezLuna2MXYnMvUa", "");
        }
  Routine practice_sentence_display
    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        timer = new util.Clock();
      Begin Routine:
        timer = core.Clock()
      End JS Routine:
        seconds_to_read = timer.getTime();
        total_read_duration += seconds_to_read
      End Routine:
        seconds_to_read = timer.getTime()
        total_read_duration += seconds_to_read
    TextComponent sentence_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentence
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    TextComponent sentence_help_text
      letterHeight = 0.03
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Click the left mouse button
        as soon as you know if the sentence is TRUE or FALSE.
    MouseComponent sent_resp
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine sentence_practice_response
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        no_of_practice_sentences += 1

        # start with True and let one frame finish
        # so that it can then set mouse_clicked to be False
        # This is to guard against mouse button being held down
        # from previous routine and then "overflowing" to this routine
        mouse_clicked = True
        result_text.text = ""
        show_result = False

        ANSWER_BOXES = [prac_TRUE, prac_FALSE]
      Each Frame:
        # mouse was last recorded as "not clicked"
        # and only run when we have not "shown result"
        if not mouse_clicked and 1 in answer_click.getPressed() and not show_result:
            mouse_clicked = True

            # if answer_box is pressed
            for answer_box in ANSWER_BOXES:
                if answer_click.isPressedIn(answer_box, buttons=[LEFT_CLICK]):
                    if (
                        (answer_box.text == "TRUE" and answer) or
                        (answer_box.text == "FALSE" and not answer)
                    ):
                        result_text.text = "Correct"
                        no_of_correct_responses += 1
                    else:
                        result_text.text = "Incorrect"
                    show_result = True
        else:
            if not 1 in answer_click.getPressed():
                mouse_clicked = False
    MouseComponent answer_click
      clickable = prac_TRUE, prac_FALSE
      forceEndRoutineOnPress = never
      saveMouseState = on valid click
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $show_result
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    TextComponent answer_help_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $show_result
      text = This sentence makes sense.
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    PolygonComponent prac_TRUE_BG
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.5, -0.20)
      saveStartStop = False
      shape = rectangle
      size = (0.16, 0.065)
      startVal [time (s)] = 0.0
      stopVal [condition] = $show_result
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    PolygonComponent prac_FALSE_BG
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.5, -0.20)
      saveStartStop = False
      shape = rectangle
      size = (0.16, 0.065)
      startVal [time (s)] = 0.0
      stopVal [condition] = $show_result
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    TextComponent prac_TRUE
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (-0.5, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $show_result
      text = TRUE
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    TextComponent prac_FALSE
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0.5, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $show_result
      text = FALSE
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    TextComponent result_text
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [condition] = $show_result
      stopVal [duration (s)] = 1.5
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  Routine init_sentence_practice
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        no_of_practice_sentences = 0
        no_of_correct_responses = 0

        avg_read_duration = 0
        total_read_duration = 0
  Routine check_sent_prac_score
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        percent_correct = int(
            no_of_correct_responses/no_of_practice_sentences * 100
        )

        avg_read_duration = total_read_duration/no_of_practice_sentences
        print(f'''
        total_read_duration: {total_read_duration}
        avg_read_duration: {avg_read_duration}
        ''')

        sentence_practice_final_result.text = (
            f"You were correct on {no_of_correct_responses} of "
            f"{no_of_practice_sentences} trials.\n"
            f"That is {percent_correct} percent correct."
        )
      End Routine:
        #if percent_correct == 100:
            #sentence_practice_until_perfect.finished = True
    TextComponent sentence_practice_final_result
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent proceed_text
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text = <PRESS SPACEBAR TO PROCEED>
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    KeyboardComponent proceed_space
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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  Routine init_2
  Routine letter_practice_init
    CodeComponent init
      Code Type = Auto->JS
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      Begin Experiment:
        perfect_scores = []
        trial_scores = []
      Begin Routine:
        perfect_scores.append(no_of_letters)

        rows = []

        random_int = 0
        while True:
            random_int = randint(0, 12)
            if random_int in rows:
                continue
            rows.append(random_int)
            if len(rows) == no_of_letters:
                break
            elif len(rows) > no_of_letters:
                raise Exception

        # print(f'rows: {rows}')
  Routine initialise
  Routine routine_1
  Routine joint_prac_init_2
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        jp_sentences = jp_sentences[0:2]
  Routine jp_load_sentence
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        jp_sentences = []
      Begin Routine:
        jp_sentences.append((sentence, answer))
  Routine main_sent_loader
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        main_sentences = []
      Each Frame:
        main_sentences.append([main_sentence, main_answer])
  Routine letters_loader
    CodeComponent code_12
      Code Type = Auto->JS
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      Each Frame:
        letters.append(letter)
  Routine for_test_only
    CodeComponent code_13
      Code Type = Auto->JS
  Routine set_init
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        # pick the next sentence and letter to show
        index_to_skip = 0
        for i in range(small_loop.thisRepN):
            index_to_skip += SIZE_OF_SETS[i]

        current_index = (
            index_to_skip + sentences_letters_set.thisRepN
        )

        curr_sentence = curr_loop_sentences[current_index][0]
        curr_sentence_answer = curr_loop_sentences[current_index][1]
        curr_letter = curr_loop_letters[current_index]

        thisExp.addData("sentence", curr_sentence)
        thisExp.addData("sentence_answer", curr_sentence_answer)

        # reset
        clicked_to_continue = False

        print(f"""
        sentences_letters_set.thisRepN={sentences_letters_set.thisRepN}
        current_index={current_index}
        curr_sentence={curr_sentence}
        curr_letter={curr_letter}
        """)
  Routine global_init
    CodeComponent code_21
      Code Type = Both
      Before JS Experiment:
        // custom function since not transpilable from Python
        //function randint(min, maxplusone) {
        //  return Math.floor(Math.random() * (maxplusone - min) ) + min;
        //}
  Routine sent_loader
    CodeComponent code_9
      Code Type = Auto->JS
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      Each Frame:
        sentences.append([sentence, answer])
  Routine pre_loop_init
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        # limit to only the sentences and letters we are using
        # and then set them again so we won't have duplicates
        curr_loop_sentences = sentences[:TOTAL_SETS]
        sentences = sentences[TOTAL_SETS:]

        curr_loop_letters = letters[:TOTAL_SETS]
        letters = letters[TOTAL_SETS:]

        # the expected answers for sentences
        curr_loop_sentence_answers = [
            s[1] for s in curr_loop_sentences
        ]

        # initialise the responses from the user to the same length
        # but all None i.e. not responded (yet)
        sentence_responses = [None for a in range(TOTAL_SETS)]

        # initialise user letter reponses, used for calculating rspan_score
        letter_responses = []
        # used for calculating total_correct_letters
        actual_letter_responses = []
  Routine loop_init
    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        SET_SIZE = SIZE_OF_SETS[small_loop.thisRepN]

        print(f"""
        small_loop.thisRepN={small_loop.thisRepN}
        SIZE_OF_SETS={SIZE_OF_SETS}
        SET_SIZE={SET_SIZE}
        """)
  Routine sentence_display
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        LEFT_CLICK = 0

        # start with True and let one frame finish
        # so that it can then set mouse_clicked to be False
        # This is to guard against mouse button being held down
        # from previous routine and then "overflowing" to this routine
        mouse_clicked = True
      Each Frame:
        # mouse was last recorded as "not clicked"
        if not mouse_clicked and mouse_2.getPressed()[LEFT_CLICK]:
            mouse_clicked = True
            clicked_to_continue = True
            print("clicked to continue")
        else:
            if not mouse_2.getPressed()[LEFT_CLICK]:
                mouse_clicked = False
    TextComponent sentence_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $avg_read_duration
      text [set every repeat] = $curr_sentence
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    TextComponent sentence_help_text_3
      letterHeight = 0.03
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $avg_read_duration
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      text:
        Click the left mouse button
        as soon as you know if the sentence is TRUE or FALSE.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $avg_read_duration
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  Routine respond_to_sentence
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        mouse_clicked = False

        ANSWER_BOXES = [TRUE, FALSE]
      Each Frame:
        if not clicked_to_continue:
            continueRoutine = False
            thisExp.addData("sentence_response", "")
            print("Did not click, skipped")


        # mouse was last recorded as "not clicked"
        if not mouse_clicked and 1 in answer_click_2.getPressed():
            mouse_clicked = True

            # if answer_box is pressed
            for answer_box in ANSWER_BOXES:
                if answer_click.isPressedIn(answer_box, buttons=[LEFT_CLICK]):
                    sentence_responses[current_index] = (
                        True if answer_box.text == 'TRUE' else False
                    )
                    thisExp.addData("sentence_response", answer_box.text)

                    print(f"current_index={current_index}")
                    print(f"sentence_reponses={sentence_responses}")
                    print(f"sentence response {answer_box.text}")
        else:
            if not 1 in answer_click.getPressed():
                mouse_clicked = False
    MouseComponent answer_click_2
      clickable = TRUE, FALSE
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent answer_help_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This sentence makes sense.
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    PolygonComponent TRUE_BG
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.5, -0.20)
      shape = rectangle
      size = (0.16, 0.065)
      startVal [time (s)] = 0.0
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    PolygonComponent FALSE_BG
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.5, -0.20)
      shape = rectangle
      size = (0.16, 0.065)
      startVal [time (s)] = 0.0
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    TextComponent TRUE
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (-0.5, -0.20)
      startVal [time (s)] = 0.0
      text = TRUE
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    TextComponent FALSE
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0.5, -0.20)
      startVal [time (s)] = 0.0
      text = FALSE
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  Routine letter_display
    CodeComponent code_25
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
      Begin Routine:
        win.mouseVisible = False
      End JS Routine:
        document.body.style.cursor='auto';
      End Routine:
        win.mouseVisible = True
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $curr_letter
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  Routine recall_letters
    CodeComponent code_jp
      Code Type = Auto->JS
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      Begin Routine:
        LEFT_CLICK = 0
        BLANK_LETTER = '_'
        LETTERS = [
            letter_S, letter_P, letter_K, letter_F,
            letter_T, letter_Q, letter_L, letter_H,
            letter_Y, letter_R, letter_N, letter_J
        ]

        # start with True and let one frame finish
        # so that it can then set mouse_clicked to be False
        # This is to guard against mouse button being held down
        # from previous routine and then "overflowing" to this routine
        mouse_clicked = True
        letter_clicked = None
        letters_clicked = []
        letters_clicked_to_record = []
        display_letters_clicked_jp.text = ""
      Each Frame:
        # mouse was last recorded as "not clicked"
        if not mouse_clicked and 1 in mouse_jp.getPressed():
            mouse_clicked = True

            # if letter is pressed
            for _letter in LETTERS:
                if mouse_jp.isPressedIn(_letter, buttons=[LEFT_CLICK]):
                    letters_clicked.append(_letter.text)

            # if BLANK is pressed
            if mouse_jp.isPressedIn(blank_letter_jp, buttons=[LEFT_CLICK]):
                letters_clicked.append(BLANK_LETTER)

            # if CLEAR is pressed
            if mouse_jp.isPressedIn(clear_letters_jp, buttons=[LEFT_CLICK]):
                letters_clicked = []

            # if NEXT is pressed
            if mouse_jp.isPressedIn(next_practice_jp, buttons=[LEFT_CLICK]):
                continueRoutine = False

            display_letters_clicked_jp.text = str(letters_clicked)
        else:
            if not 1 in mouse_jp.getPressed():
                mouse_clicked = False
      End Routine:
        num_letters_clicked = len(letters_clicked)
        difference = SET_SIZE - num_letters_clicked

        #----- This is to keep track of actual_letter_responses
        # if the user recalled fewer letters, then we record as None
        if difference > 0:
            for _letter in letters_clicked:
                actual_letter_responses.append(_letter)
            for a in range(difference):
                actual_letter_responses.append(None)
        else:
            # if the user recalled the correct number of letters or recalled more letters
            # then we record only the correct number of letters
            for _letter in letters_clicked[:SET_SIZE]:
                actual_letter_responses.append(_letter)

        # Record the actual letters that were clicked
        letters_clicked_to_record = letters_clicked[:]

        #----- This is to keep track of rspan_score
        # if there's any difference in length, then
        # rspan_score for this set will be zero
        # so we make this intentionally wrong but in the correct length
        if difference:
            letters_clicked = [None for a in range(SET_SIZE)]

        # cannot use list.extend() because that transpiles to JS array.concat()
        # in which it returns a new array and does not modify the existing array
        for _letter in letters_clicked:
            letter_responses.append(_letter)

        print(f"""
        letter_responses={letter_responses}
        actual_letter_responses={actual_letter_responses}
        """)
    MouseComponent mouse_jp
      clickable = clear_letters, blank_letter, next_practice, letter_S, letter_P, letter_K, letter_F, letter_T, letter_Q, letter_L, letter_H, letter_Y, letter_R, letter_N, letter_J
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    TextComponent remind_text_jp
      letterHeight = 0.035
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      text = Select the letters in the order presented. Use the BLANK button to fill in forgotten letters.
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    TextComponent letter_S
      letterHeight = 0.05
      pos = (-0.3, -0.12)
      startVal [time (s)] = 0.0
      text = S
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    TextComponent letter_P
      letterHeight = 0.05
      pos = (-0.3, 0.01)
      startVal [time (s)] = 0.0
      text = P
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    TextComponent letter_K
      letterHeight = 0.05
      pos = (-0.3, 0.13)
      startVal [time (s)] = 0.0
      text = K
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    TextComponent letter_F
      letterHeight = 0.05
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = F
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    TextComponent letter_T
      letterHeight = 0.05
      pos = (0, -0.12)
      startVal [time (s)] = 0.0
      text = T
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    TextComponent letter_Q
      letterHeight = 0.05
      pos = (0, 0.01)
      startVal [time (s)] = 0.0
      text = Q
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    TextComponent letter_L
      letterHeight = 0.05
      pos = (0, 0.13)
      startVal [time (s)] = 0.0
      text = L
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    TextComponent letter_H
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = H
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    TextComponent letter_Y
      letterHeight = 0.05
      pos = (0.3, -0.12)
      startVal [time (s)] = 0.0
      text = Y
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    TextComponent letter_R
      letterHeight = 0.05
      pos = (0.3, 0.01)
      startVal [time (s)] = 0.0
      text = R
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    TextComponent letter_N
      letterHeight = 0.05
      pos = (0.3, 0.13)
      startVal [time (s)] = 0.0
      text = N
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    TextComponent letter_J
      letterHeight = 0.05
      pos = (0.3, 0.25)
      startVal [time (s)] = 0.0
      text = J
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    PolygonComponent blank_letter_BG_jp
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0, -0.25)
      shape = rectangle
      size = (0.16, 0.065)
      startVal [time (s)] = 0.0
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    PolygonComponent clear_letters_BG_jp
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.5, -0.40)
      shape = rectangle
      size = (0.16, 0.065)
      startVal [time (s)] = 0.0
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    PolygonComponent next_practice_BG_jp
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.5, -0.40)
      shape = rectangle
      size = (0.16, 0.065)
      startVal [time (s)] = 0.0
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    TextComponent blank_letter_jp
      color = black
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = BLANK
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    TextComponent display_letters_clicked_jp
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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    TextComponent clear_letters_jp
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (-0.5, -0.40)
      startVal [time (s)] = 0.0
      text = CLEAR
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    TextComponent next_practice_jp
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0.5, -0.40)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine feedback_display
    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        #--- Number of sentence corrects/errors in this set
        curr_set_num_sentence_correct = 0
        curr_set_num_sentences = SIZE_OF_SETS[small_loop.thisRepN]
        num_sentences_to_skip = 0
        for i in range(small_loop.thisRepN):
            num_sentences_to_skip += SIZE_OF_SETS[i]

        curr_set_sentence_answers = curr_loop_sentence_answers[
            num_sentences_to_skip:num_sentences_to_skip + curr_set_num_sentences
        ]
        curr_set_sentence_responses = sentence_responses[
            num_sentences_to_skip:num_sentences_to_skip + curr_set_num_sentences
        ]

        for i in range(curr_set_num_sentences):
            if (
                curr_set_sentence_answers[i] ==
                curr_set_sentence_responses[i]
            ):
                curr_set_num_sentence_correct += 1
                accumulated_correct_sentences += 1

        sentences_feedback_text = (
            f"- Correct sentences: {curr_set_num_sentence_correct} out of "
            f"{curr_set_num_sentences}"
        )

        print(f"""
        num_sentences_to_skip={num_sentences_to_skip}
        curr_set_num_sentences={curr_set_num_sentences}

        curr_set_sentence_responses={curr_set_sentence_responses}
        curr_set_sentence_answers={curr_set_sentence_answers}
        curr_set_num_sentence_correct={curr_set_num_sentence_correct}
        """)

        #--- Percentage of correct sentences answered so far
        accumulated_num_of_sentences += SIZE_OF_SETS[small_loop.thisRepN]
        print(f"""
        accu_cs={accumulated_correct_sentences}
        accu_ns={accumulated_num_of_sentences}
        """)
        percent = int(
            accumulated_correct_sentences / accumulated_num_of_sentences * 100
        )
        percent_text = f"{percent}% sentences correct"
        sent_percent_correct = percent_text


        #--- Number of correct letters recalled in this set
        num_letters_to_skip = 0
        for i in range(small_loop.thisRepN):
            num_letters_to_skip += SIZE_OF_SETS[i]

        curr_set_letters = curr_loop_letters[
            num_letters_to_skip:num_letters_to_skip + SET_SIZE
        ]
        curr_set_letter_responses = actual_letter_responses[
            num_letters_to_skip:num_letters_to_skip + SET_SIZE
        ]

        num_correct_letters = 0
        for i in range(len(curr_set_letters)):
            if curr_set_letter_responses[i] == curr_set_letters[i]:
                num_correct_letters += 1

        thisExp.addData("letter_answers", curr_set_letters)
        thisExp.addData("letter_responses", letters_clicked_to_record)

        letters_feedback_text = (
            f"- Correct letters: {num_correct_letters} out of "
            f"{SET_SIZE}"
        )

        #--- Accumulate rspan_pcu score ---
        curr_set_rspan_pcu = num_correct_letters/SET_SIZE
        rspan_pcu += curr_set_rspan_pcu
        thisExp.addData("curr_set_rspan_pcu", curr_set_rspan_pcu)

        print(f"""
        letter_responses={letter_responses}
        curr_set_letter_responses={curr_set_letter_responses}
        curr_set_letters={curr_set_letters}
        """)
    TextboxComponent performance_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.25)
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every frame] = Your performance in the last sequence:
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    TextboxComponent letters_feedback
      bold = False
      editable = False
      letterHeight = 0.04
      pos = (0, 0.17)
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every frame] = $letters_feedback_text
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    TextboxComponent sentences_feedback
      bold = False
      editable = False
      letterHeight = 0.04
      pos = (0, 0.12)
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every frame] = $sentences_feedback_text
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    TextboxComponent accum_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.05)
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every frame] = Your accumulated performance on the sentences is:
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    TextboxComponent sentences_percent
      bold = True
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 1
      color = -0.4824, -0.4902, -0.4824
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.045
      pos = (0, -0.15)
      size = (0.55, 0.07)
      startVal [time (s)] = 0.0
      text [set every frame] = $sent_percent_correct
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    TextboxComponent reminder_text
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every frame] = (remember to keep your score as high as possible, ideally above 85%)
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    TextComponent proceed_text_2
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text = <PRESS SPACEBAR TO PROCEED>
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    KeyboardComponent proceed_space_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine process_scores
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        for i in range(len(curr_loop_sentence_answers)):
            if sentence_responses[i] == None:
                sent_speed_error += 1
                continue
            if sentence_responses[i] != curr_loop_sentence_answers[i]:
                sent_acc_error += 1

        sent_total_error = sent_speed_error + sent_acc_error

        print(f"""
        Score so far:
        sent_speed_error={sent_speed_error}
        sent_acc_error={sent_acc_error}
        sent_total_error={sent_total_error}
        """)

        if is_main_test:
            index = 0
            for num_letters in SIZE_OF_SETS:
        #        print(f"""
        #        index={index}
        #        num_letters={num_letters}
        #        lr:{str(letter_responses[index:index + num_letters])}
        #        cll:{str(curr_loop_letters[index:index + num_letters])}
        #        eq:{str(letter_responses[index:index + num_letters]) == str(curr_loop_letters[index:index + num_letters])}
        #        """)
                if (
                    str(letter_responses[index:index + num_letters]) ==
                    str(curr_loop_letters[index:index + num_letters])
                ):
                    rspan_score += num_letters
                index += num_letters

            for i in range(len(curr_loop_letters)):
                if actual_letter_responses[i] == curr_loop_letters[i]:
                    total_correct_letters += 1

            print(f"""
            rspan_score={rspan_score}
            total_correct_letters={total_correct_letters}
            """)
            thisExp.addData("rspan_score", rspan_score)
            thisExp.addData("total_correct_letters", total_correct_letters)
            thisExp.addData("sent_speed_error", sent_speed_error)
            thisExp.addData("sent_acc_error", sent_acc_error)
            thisExp.addData("sent_total_error", sent_speed_error + sent_acc_error)
            thisExp.addData("total_number_of_sentences", accumulated_num_of_sentences)
            thisExp.addData("sent_percent_correct", percent)

            # if we are at the last big loop rep, we calculate rspan_pcu
            # and record it.
            # We assume that LOOP_SIZE is constant for all big loops.
            if big_loop.thisRepN == (BIG_LOOP_REPS-1):
                rspan_pcu /= (BIG_LOOP_REPS * LOOP_SIZE)
                thisExp.addData("rspan_pcu", rspan_pcu)
      End Routine:
        # only end joint practice when 100% on sentences
        # but don't end early for main test
        if (
            not is_main_test #and sent_total_error == 0
        ):
            big_loop.finished = True

         # DISABLE INFINITE PRACTICE FOR TESTING ONLY
  Routine pre_big_loop_init
    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Experiment:
        SIZE_OF_SETS = []
        SET_SIZE = 0
        LOOP_SIZE = 0

        # scores for all of main test, not just per loop
        rspan_score = 0
        total_correct_letters = 0
        sent_acc_error = 0
        sent_speed_error = 0
        sent_total_error = 0
        accumulated_num_of_sentences = 0
        accumulated_correct_sentences = 0
      Begin Routine:
        BIG_LOOP_REPS = 0
        is_main_test = False

        # joint practice settings
        if jp_or_main_loop.thisRepN == 0:
            is_main_test = False
            sentence_file = 'practice_sentences/sentences.csv'
            BIG_LOOP_REPS = 100000 # "infinite"
            POSSIBLE_SET_SIZES = [2,2,2]
            accumulated_num_of_sentences = 0
            accumulated_correct_sentences = 0
        # main test settings
        elif jp_or_main_loop.thisRepN == 1:
            is_main_test = True
            sentence_file = 'main_test/sentences.csv'
            BIG_LOOP_REPS = 2
            POSSIBLE_SET_SIZES = [4,5,6]
            rspan_score = 0
            sent_acc_error = 0
            sent_speed_error = 0
            sent_total_error = 0
            accumulated_num_of_sentences = 0
            accumulated_correct_sentences = 0

        LOOP_SIZE = len(POSSIBLE_SET_SIZES)
        TOTAL_SETS = sum(POSSIBLE_SET_SIZES)

        # accumulate score after each set, then we'll finally
        # divide it by the sum of loop sizes through all big loops
        rspan_pcu = 0

        # reset
        sentences = []
        letters = []

        # Hard coding the average read duration (in seconds) for testing purposes
        # otherwise the value is calculated in check_sent_prac_score routine's code_5
        # avg_read_duration = 2
      End Routine:
        if jp_or_main_loop.thisRepN == 0:
            thisExp.addData("avg_read_duration", avg_read_duration)
  Routine big_loop_init
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        print(f"""
        big_loop.thisRepN={big_loop.thisRepN}
        """)

        if not is_main_test:
            # reset these for joint practice
            # as participants will be in this loop until they get no sentence errors
            sent_acc_error = 0
            sent_speed_error = 0
            sent_total_error = 0
            accumulated_num_of_sentences = 0
            accumulated_correct_sentences = 0

        SIZE_OF_SETS = shuffle(POSSIBLE_SET_SIZES)
  Routine intro
    TextboxComponent intro_3
      alignment = center-left
      autoLog = False
      bold = False
      borderColor = -0.4824, -0.4902, -0.4824
      borderWidth = 7
      color = 1.0000, 1.0000, 1.0000
      editable = False
      fillColor = -0.4824, -0.4902, -0.4824
      letterHeight = 0.04
      lineSpacing = 1
      saveStartStop = False
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
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      text:
        This experiment involves memorising a sequence of letters that are shown in between sentences that you will have to judge as realistic or not.

        In order to help you get familiar with the experiment, you will first engage with several practice trials that will provide a step-by-step introduction to the main task.

        By the end of these practice stages you should be comfortable with the experiment. If not, please talk to the researcher in the room.
    TextComponent space_text
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = <PRESS SPACEBAR TO PROCEED>
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    KeyboardComponent intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Routine:
        print(expInfo["participant"])
        print(expInfo["session2"])
  Routine test
    TextComponent lett_feedback
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Correct letters: 0 out of 2
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    TextComponent sent_feedback
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Correct sentences: 0 out of 4
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    TextComponent sent_percent
      letterHeight = 0.04
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Your accumulated performance on the sentences is:
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    TextboxComponent percent
      bold = True
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 1
      color = -0.4824, -0.4902, -0.4824
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      pos = (0, -0.15)
      size = (0.17, 0.08)
      startVal [time (s)] = 0.0
      text = 100%
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    TextComponent reminder
      letterHeight = 0.03
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = (please keep your score as high as possible, ideally aboe 85%)
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    TextComponent space
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text = <PRESS SPACEBAR TO PROCEED>
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Flow
  Routine intro
  Routine lett_prac_instr1
  LoopInitiator practice_letters_block loopType="TrialHandler"
    conditionsFile = practice_letters/block.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('letters_file', 'practice_letters/letters.csv'), ('no_of_letters', 2)]),
      OrderedDict([('letters_file', 'practice_letters/letters.csv'), ('no_of_letters', 4)])]
    Routine letter_practice_init
    LoopInitiator practice_letters_loop loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = $letters_file
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine practice_letter_display_2
    LoopTerminator practice_letters_loop
    Routine practice_letters_response
  LoopTerminator practice_letters_block
  Routine check_score
  Routine sent_prac_instr1
  Routine init_sentence_practice
  LoopInitiator sentence_practice_loop loopType="TrialHandler"
    conditionsFile = practice_sentences/sentences.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sentence', 'Andy was stopped by the policeman because he crossed the yellow heaven.'), ('answer', False)]),
      OrderedDict([('sentence', 'During winter you can get a room at the beach for a very low rate.'), ('answer', True)]),
      OrderedDict([('sentence', "The prosecutor's dish was lost because it was not based on fact."), ('answer', False)]),
      OrderedDict([('sentence', 'During the week of final spaghetti, I felt like I was losing my mind.'), ('answer', False)]),
      OrderedDict([('sentence', "After final exams are over, we'll be able to take a well-deserved rest."), ('answer', True)])]
    Routine practice_sentence_display
    Routine sentence_practice_response
  LoopTerminator sentence_practice_loop
  Routine check_sent_prac_score
  Routine joint_prac_instr1
  Routine joint_prac_instr2
  LoopInitiator jp_or_main_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine pre_big_loop_init
    LoopInitiator sent_loader_loop loopType="TrialHandler"
      conditionsFile = $sentence_file
      isTrials = False
      loopType = random
      nReps = 1
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      Routine sent_loader
    LoopTerminator sent_loader_loop
    LoopInitiator letters_loader_loop loopType="TrialHandler"
      conditionsFile = practice_letters/letters.csv
      isTrials = False
      loopType = random
      nReps = LOOP_SIZE
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      Routine letters_loader
    LoopTerminator letters_loader_loop
    Routine main_test_instr1
    LoopInitiator big_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = BIG_LOOP_REPS
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      Routine big_loop_init
      Routine pre_loop_init
      LoopInitiator small_loop loopType="TrialHandler"
        loopType = random
        nReps = LOOP_SIZE
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        Routine loop_init
        LoopInitiator sentences_letters_set loopType="TrialHandler"
          loopType = random
          nReps = SET_SIZE
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          Routine set_init
          Routine sentence_display
          Routine respond_to_sentence
          Routine letter_display
        LoopTerminator sentences_letters_set
        Routine recall_letters
        Routine feedback_display
      LoopTerminator small_loop
      Routine process_scores
    LoopTerminator big_loop
  LoopTerminator jp_or_main_loop
  Routine end_instr
